PsychoPy2experiment version="2021.1.4"
Settings
  Data filename = u'data/%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '', 'Num': '', 'gender': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = paradigm1
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Routines
  Routine introduction1
    ImageComponent introduction1_1
      image = document\introduction1_1.png
      saveStartStop = False
      size = (1.76, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine introduction2
    ImageComponent introduction2_1
      image = document\introduction2_1.png
      saveStartStop = False
      size = (1.76, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine device_use_time1
    RatingScaleComponent rating
      categoryChoices = 1,2,3,4,5,6,7,8,9,10,11,12,12+
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, 0
      saveStartStop = False
      scaleDescription = 请根据您每日手机、电脑等社交媒体使用时间选择最接近的使用时长
      size = 1.5
      startVal [time (s)] = 0.0
      storeRatingTime = False
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    ImageComponent image
      image = document\device_use_time.png
      pos = (0, 0.2)
      saveStartStop = False
      size = (2.15,0.4)
      startVal [time (s)] = 0.0
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  Routine time_percition
    TextComponent concentration
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      text = +
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    ImageComponent trumpet
      image = document\laba.png
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = $emerge
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    SoundComponent sound_1
      hamming = False
      saveStartStop = False
      sound = A
      startVal [time (s)] = 2
      stopVal [duration (s)] = $emerge
      syncScreenRefresh = False
      volume = 5
  Routine repeat_time
    TextComponent text1
      color = black
      font = hei
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        声音正在复制
    SoundComponent sound_2
      saveStartStop = False
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image_copy
      image = document\laba.png
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    KeyboardComponent key_resp_sound_end
      allowedKeys = 'right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine repeat_start
    TextComponent text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        请按下左键开始声音复制
        请按下右键结束声音复制
    KeyboardComponent repeat_sound_start
      allowedKeys = 'left'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine introduction3
    ImageComponent introduction3_1
      image = document\introduction3_1.png
      saveStartStop = False
      size = (1.76,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine delay_discount_task
    TextComponent text_2
      color = black
      letterHeight = 0.07
      pos = (-0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 立即获得金额
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    TextComponent instance
      color = blue
      letterHeight = 0.07
      pos = (-0.4, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $x
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    TextComponent text_3
      color = black
      letterHeight = 0.07
      pos = (0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 一个月后金额
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    TextComponent one_month
      color = blue
      letterHeight = 0.07
      pos = (0.4, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 200
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        x=100
        n=0.25
      End Routine:
        if 'left' in delay_discount_key.keys:
            x = round(x-x*n,2)
            n = n/2
        if 'right' in delay_discount_key.keys:
            x = round(x+x*n,2)
            n = n/2
    KeyboardComponent delay_discount_key
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent text_4
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 实验结束，感谢您的参与！
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Flow
  Routine introduction1
  Routine device_use_time1
  Routine introduction2
  LoopInitiator loop1 loopType="TrialHandler"
    conditionsFile = document\material.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'emerge': 0.5, 'text_emerge': 1.5, 'time': 1},
      {'emerge': 1, 'text_emerge': 2, 'time': 2},
      {'emerge': 1.5, 'text_emerge': 2.5, 'time': 3},
      {'emerge': 2, 'text_emerge': 3, 'time': 4}]
    Routine time_percition
    Routine repeat_start
    Routine repeat_time
  LoopTerminator loop1
  Routine introduction3
  LoopInitiator loop2 loopType="TrialHandler"
    loopType = random
    nReps = 6
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    Routine delay_discount_task
  LoopTerminator loop2
  Routine thanks
